# Example code for PHY4004 Assignment 2 Dicom import

###### Run Parameters ######
i:Ts/NumberOfThreads = 0
#b:Ts/PauseBeforeQuit = "True"
i:Ts/ShowHistoryCountAtInterval = 10000000

##### Graphics settings #####
#s:Gr/ViewA/Type        = "OpenGL"
#i:Gr/ViewA/WindowSizeX = 900
#i:Gr/ViewA/WindowSizeY = 900
#d:Gr/ViewA/Theta       = 0 deg  	# Can set viewing angle in terms of theta and phi to get a better view of phantom
#d:Gr/ViewA/Phi         = 90 deg
#i:Gr/ShowOnlyOutlineIfVoxelCountExceeds = 1000000 # By default, CT scans show just as an outline if there are too many voxels. Set this high to see our CT. 

###### Geometry and Importing Phantom #####
includeFile = ../CTData/HUtoMaterialSchneider.txt  # Includes file defining mapping from CT to Topas materials

# World settings
s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 1. m
d:Ge/World/HLY       = 1. m
d:Ge/World/HLZ       = 1. m
#b:Ge/World/Invisible = "FALSE"

# Import patient - note the reference to the directory where 
# CT is stored, and a tag to identify it as a CT dataset
s:Ge/Patient/Parent             = "World"
s:Ge/Patient/Type               = "TsDicomPatient"
s:Ge/Patient/DicomDirectory     = "../CTData"
sv:Ge/Patient/DicomModalityTags = 1 "CT"

d:Ge/Patient/TransX = 0.0 cm
d:Ge/Patient/TransY = 0.0 cm
d:Ge/Patient/TransZ = 0.0 cm
d:Ge/Patient/RotX = 0.0 deg
d:Ge/Patient/RotY = 0.0 deg
d:Ge/Patient/RotZ = 0.0 deg

#sv:Ge/Patient/ColorByRTStructNames = 4 "GTVp" "Lung_L" "Heart" "SpinalCord"
#sv:Ge/Patient/ColorByRTStructColors = 4 "yellow" "red" "blue" "green"

iv:Ge/Patient/ShowSpecificSlicesZ = 1 -1	# Optional - only show specific slices for efficiency. -1 here shows only the middle slice.

#d:So/Demo/BeamPositionCutoffY = 1.5 cm # Y extent of position (if Flat or Gaussian)
#s:So/Demo/BeamAngularDistribution = "Flat" # None, Flat or Gaussian
#d:So/Demo/BeamAngularCutoffX = -3.45 deg # X cutoff of angular distrib (if Flat or Gaussian)
#d:So/Demo/BeamAngularCutoffY = -3.45 deg # Y cutoff of angular distrib (if Flat or Gaussian)

s:Sc/DoseScorer/Quantity="DoseToMedium" # Quantity to score
s:Sc/DoseScorer/Component = "Patient" # Where to score
b:Sc/DoseScorer/OutputToConsole = "TRUE" # Output
s:Sc/DoseScorer/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DoseScorer/OutputFile = "./full_beam_results"
s:Sc/DoseScorer/OutputType = "DICOM" 
i:Ts/Seed = 0

s:So/Demo/Type = "Beam"
s:So/Demo/Component = "BeamPosition"
s:So/Demo/BeamParticle = "proton"

u:So/Demo/BeamEnergySpread = 1.

s:So/Demo/BeamAngularDistribution="None"

s:So/Demo/BeamPositionDistribution="Flat"

s:So/Demo/BeamPositionCutoffShape = "Rectangle"
d:So/Demo/BeamPositionCutoffX = 1.5 cm
d:So/Demo/BeamPositionCutoffY = 0.01 cm
d:So/Demo/BeamEnergy = 125 MeV
i:So/Demo/NumberOfHistoriesInRun   = 10000
d:Ge/BeamPosition/TransZ = 0 m
d:Ge/BeamPosition/TransX = -4.6 cm
d:Ge/BeamPosition/TransY = -20 cm
d:Ge/BeamPosition/RotX = 90 deg

s:So/Second/Type = "Beam"
s:So/Second/Component = "SecondBeamPosition"
s:So/Second/BeamParticle = "proton"
u:So/Second/BeamEnergySpread = 1.
s:So/Second/BeamAngularDistribution="None"
s:So/Second/BeamPositionDistribution="Flat"
s:So/Second/BeamPositionCutoffShape = "Rectangle"
d:So/Second/BeamPositionCutoffX = 1.5 cm
d:So/Second/BeamPositionCutoffY = 0.01 cm
d:So/Second/BeamEnergy = 124 MeV
i:So/Second/NumberOfHistoriesInRun   = 3396
d:Ge/SecondBeamPosition/TransZ = 0 m
d:Ge/SecondBeamPosition/TransX = -4.6 cm
d:Ge/SecondBeamPosition/TransY = -20 cm
d:Ge/SecondBeamPosition/RotX = 90 deg


#--- Primary Beam ---#
s:So/Demo/Type = "Beam"
s:So/Demo/Component = "BeamPosition"
s:So/Demo/BeamParticle = "gamma"
d:So/Demo/BeamEnergy = 1 MeV
u:So/Demo/BeamEnergySpread = 0.
d:Ge/BeamPosition/TransZ = 0 m
d:Ge/BeamPosition/TransX = -4.6 cm
d:Ge/BeamPosition/TransY = -20 cm
d:Ge/BeamPosition/RotX = 90 deg

s:So/Demo/BeamPositionDistribution="Flat"
s:So/Demo/BeamPositionCutoffShape = "Rectangle" # Rectangle or Ellipse (if Flat or Gaussian)
d:So/Demo/BeamPositionCutoffX = 1.5 cm # X extent of position (if Flat or Gaussian)
d:So/Demo/BeamPositionCutoffY = 0.01 cm # Y extent of position (if Flat or Gaussian)

#--- Secondary Beam ---#
s:Ge/SecondBeamComponent/Parent = "World"
s:Ge/SecondBeamComponent/Type   = "Group"
d:Ge/SecondBeamComponent/TransX = -4.6 cm
d:Ge/SecondBeamComponent/TransY = 30 cm
d:Ge/SecondBeamComponent/TransZ = 0. cm
d:Ge/SecondBeamComponent/RotX   = 270. deg
#d:Ge/SecondBeamComponent/RotY   = 90. deg
#d:Ge/SecondBeamComponent/RotZ   = 0. deg

i:So/SecondBeam/NumberOfHistoriesInRun   = 1000000
s:So/SecondBeam/Type                     = "Beam"
s:So/SecondBeam/Component                = "SecondBeamComponent"
s:So/SecondBeam/BeamParticle             = "gamma"
d:So/SecondBeam/BeamEnergy               = 1 MeV
u:So/SecondBeam/BeamEnergySpread         = 0.
s:So/SecondBeam/BeamPositionDistribution="Flat"
s:So/SecondBeam/BeamPositionCutoffShape = "Rectangle" # Rectangle or Ellipse (if Flat or Gaussian)
d:So/SecondBeam/BeamPositionCutoffX = 1.5 cm # X extent of position (if Flat or Gaussian)
d:So/SecondBeam/BeamPositionCutoffY = 0.01 cm # Y extent of position (if Flat or Gaussian)
