#b:Ts/PauseBeforeQuit="True"
i:So/Demo/NumberOfHistoriesInRun = 10000
i:Ts/ShowHistoryCountAtInterval = 5000
i:Ts/NumberOfThreads = 0
#s:Gr/ViewA/Type = "OpenGL"

s:So/Demo/Type = "Beam"
s:So/Demo/Component = "BeamPosition"
s:So/Demo/BeamParticle = "proton"
u:So/Demo/BeamEnergySpread = 1.
s:So/Demo/BeamAngularDistribution="None"
s:So/Demo/BeamPositionDistribution="None"

s:Ge/World/Material = "Vacuum"
d:Ge/World/HLX=20.0 cm
d:Ge/World/HLY=20.0 cm
d:Ge/World/HLZ=50.0 cm
b:Ge/World/Invisible = "True"

s:Ge/Phantom/Type="TsCylinder"
s:Ge/Phantom/Parent="World"
s:Ge/Phantom/Material="G4_WATER"
d:Ge/Phantom/HL = 27.5 cm # This is a rough guess. Change this.
d:Ge/Phantom/RMin = 0. cm
d:Ge/Phantom/RMax = 15. cm
d:Ge/Phantom/SPhi = 0. deg
d:Ge/Phantom/DPhi = 360. deg
s:Ge/Phantom/Color="blue"

#====Scorer====#`
s:Sc/DoseScorer/Quantity="DoseToMedium" # Quantity to score
s:Sc/DoseScorer/Component = "Phantom" # Where to score
b:Sc/DoseScorer/OutputToConsole = "TRUE" # Output
s:Sc/DoseScorer/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/DoseScorer/ZBins = 1000